PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[1,1,1]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine cue
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    ImageComponent left_box
      image = stimuli/box.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    ImageComponent right_box
      image = stimuli/box.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    KeyboardComponent cue_resp
      allowedKeys = '1','2'
      correctAns = $good_side
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent selection_indicator
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        selection_made = False


        selectionIndicator = visual.Polygon(win, edges =4, ori=45, radius=195,
                                            name = 'selectionIndicator',
                                            lineColor = 'white', fillColor=None,
                                            units ='pix', lineWidth=2, interpolate=True)
      Each Frame:
        position = None
        if((not cue_resp.keys == None) and selection_made == False):
            if cue_resp.keys == '1':
                position = (-0.3, -0.1)
            elif cue_resp.keys == '2':
                position = (0.3, -0.1)
            selection_made = True
            selectionIndicator.pos(position)
            selectionIndicator.setAutoDraw(True)
      End Routine:
        selection_made = False
    CodeComponent good_side_code
      Code Type = Auto->JS
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      Begin Experiment:
        good_side = "right"
        #counter = 0
        num_correct = 0
        num_switch = 0
      Begin Routine:
        '''
        if(counter == 5):
            if good_side == "right":
                good_side = "left"
            elif good_side == "left":
                good_side = "right"
            counter = 0
        counter = counter + 1
        '''

        #if the participant has the right number of
        #correct guesses
        if num_correct == num_switch_list[num_switch]:
            if good_side == "right":
                good_side = "left"
            elif good_side == "left":
                good_side = "right"
            num_correct = 0
            num_switch = num_switch + 1 # we move one switch forward
      End Routine:
        #Check if these need to be reward or just right
        # I'm guessing rewarded
        if(cue_resp.keys == '1' and good_side == "left"):
            num_correct = num_correct + 1

        if(cue_resp.keys == '2' and good_side == "right"):
            num_correct = num_correct + 1
  Routine outcome
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    CodeComponent box_selection_code
      Code Type = Auto->JS
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      Begin Routine:
        #if no press is made
        right_image = 'stimuli/box.png'
        left_image = 'stimuli/box.png'
        #if right press
        if cue_resp.keys=='1': # compare probabilities to list and decide whether we reward
            #right_image = 'stimuli/box_coin.png'
            if sequence[trials.thisN] == 1 and good_side == "left":
                left_image = 'stimuli/box_coin.png'
            else:
                left_image = 'stimuli/box_empty.png'
        #if left press
        # load in images of either coin box or empty box conditionally
        elif cue_resp.keys=='2': #same as above
            if sequence[trials.thisN] == 1 and good_side == "right":
                right_image = 'stimuli/box_coin.png'
            else:
                right_image = 'stimuli/box_empty.png'
        else:
            Choice="NA"
    ImageComponent outcome_left_box
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent outcome_right_box
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation
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    TextComponent fixation_cross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine get_ready
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    TextComponent get_ready_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get Ready!
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    KeyboardComponent advance_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent probability_sequence_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import csv
        sequence = []

        #TODO: pull this from experiment variables.
        number_of_trials = 150

        while len(sequence) < number_of_trials:
            #generate a probabilty list at 75p by alternating
            #ten trials at 80p and ten trials 70p.
            sequence_80 = [0] * 2 + [1] * 8
            random.shuffle(sequence_80)
            sequence_70 = [0] * 3 + [1] * 7
            random.shuffle(sequence_70)
            sequence = sequence + sequence_80 + sequence_70
            #TODO: output this sequence to a .csv that gets saved.

        with open('test.csv', 'w', newline='') as myfile:
             wr = csv.writer(myfile)
             wr.writerow(sequence)
    CodeComponent define_switches_code
      Code Type = Auto->JS
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      Begin Experiment:
        #number correct for the switch occurs
        num_switch_list = [3,3,3,3,3,3,3,3,3,3,3,3,3,3,3]#[7,8,9,10,11,12]
        #now shuffle the list
        random.shuffle(num_switch_list)
Flow
  Routine get_ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    Routine cue
    Routine outcome
    Routine fixation
  LoopTerminator trials
